PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '0', 'gender': '### Female or Male ###'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [600, 600]
  expName = calibration_exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent all_variables
      Code Type = Py
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      Before Experiment:
        from src.experiments.logger import setup_logger, close_logger
        logger_for_runner = setup_logger(__name__.rsplit(".", maxsplit=1)[-1], level=logging.INFO)

        # Thermoino
        port = "COM7" # COM7 for top usb port on the front, use list_com_ports() to find out
        temp_baseline = 30 # has to be the same as in MMS
        rate_of_rise = 5 # has to be the same as in MMS

        # Stimuli
        stimuli_clock = core.Clock()
        stimuli_duration = 0.2 # 8
        iti_duration = 0.2 # 8  + np.random.randint(0, 5)

        # Pre-exposure
        temps_preexposure = [35, 36, 37]

        # Estimator
        trials_vas0 = 7 # is the same as nReps in psychopy loop
        temp_start_vas0 = 39.
        temp_std_vas0 = 3.5

        trials_vas70 = 5 # is the same as nReps in psychopy loop
        temp_start_vas70 = None #  will be set after VAS 0 estimate
        temp_start_vas70_plus = 3 # VAS 0 estimate plus int
        temp_std_vas70 = 1.5 # smaller std for higher temperatures
      End Experiment:
        close_logger(logger_for_runner)
    CodeComponent thermoino
      Code Type = Py
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      Before Experiment:
        from src.experiments.thermoino import Thermoino
      Begin Experiment:
        luigi = Thermoino(
            port=port,
            temp_baseline=temp_baseline, # has to be the same as in MMS
            rate_of_rise=rate_of_rise) # has to be the same as in MMS

        luigi.connect()
        luigi.trigger()
      End Experiment:
        luigi.close()
  Routine iti
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    PolygonComponent cross_neutral
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = iti_duration
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  Routine preexposure
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    CodeComponent prexposure
      Code Type = Py
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      Begin Routine:
        # TODO: chnge start temp depending on anwser

        checked = False
        stimuli_clock.reset()

        trial = loop_preexposure.thisN
        time_for_ramp_up = luigi.set_temp(temps_preexposure[trial])[1]
      Each Frame:
        routine_duration = time_for_ramp_up + stimuli_clock.getTime()

        if not checked:
            if routine_duration > stimuli_duration:
                luigi.set_temp(temp_baseline)
                checked = True
    PolygonComponent corss_pain_preexposure
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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  Routine feedback_preexposure
    RoutineSettingsComponent feedback_preexposure
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      desc:
        War ein Reiz schmerzhaft?

        (y/n)
    TextComponent question_preexposure
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        War einer der Reize schmerzhaft?

        (y/n)
    KeyboardComponent response_preexposure
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition_preeposure_to_vas0
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    CodeComponent transition_preexposure_to_vas0
      Code Type = Py
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      Begin Routine:
        # If response was yes
        logger_for_runner.info("Preexposure painful? Answer: %s", response_preexposure.keys)

        if response_preexposure.keys == "y":
            # Decrease starting temperature
            global temp_start_vas0 # psychopy has to be able to find it in the spaghetti
            temp_start_vas0 -= 2
            # Reinitialize estimator for VAS 0 with differen temp_start
            global estimator_vas0
            estimator_vas0 = BayesianEstimatorVAS(
                vas_value=0,
                temp_start=temp_start_vas0,
                temp_std=temp_std_vas0,
                trials=trials_vas0)
  Routine trial_vas0
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    PolygonComponent cross_pain_vas0
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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    CodeComponent thermoino_vas0
      Code Type = Py
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      Begin Routine:
        checked = False
        stimuli_clock.reset()

        time_for_ramp_up = luigi.set_temp(estimator_vas0.current_temp)[1]
      Each Frame:
        routine_duration = time_for_ramp_up + stimuli_clock.getTime()

        if not checked:
            if routine_duration > stimuli_duration:
                luigi.set_temp(temp_baseline)
                checked = True
  Routine feedback_vas0
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    TextComponent question_vas0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = response_vas0.status==FINISHED
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      text:
        War der Reiz schmerzhaft?

        (y/n)
    KeyboardComponent response_vas0
      allowedKeys = 'y','n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine estimate_vas0
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    TextComponent answer_vas0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $f"Ihre Antwort war {response_vas0.keys}."
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    CodeComponent estimator_vas0
      Code Type = Py
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      Before Experiment:
        from src.experiments.calibration import BayesianEstimatorVAS

        # Estimator for VAS 0 (pain threshold)
        estimator_vas0 = BayesianEstimatorVAS(
            vas_value= 0,
            temp_start=temp_start_vas0,
            temp_std=temp_std_vas0,
            trials=trials_vas0)
      Begin Routine:
        trial = loop_vas0.thisN
        estimator_vas0.conduct_trial(response=response_vas0.keys,trial=trial)
  Routine transition_vas0_to_vas70
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    CodeComponent init_estimator_vas70
      Code Type = Py
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      Begin Routine:
        # Preparing estimator for VAS 70
        # slight overshoot to showcase the full range of possible temperatures
        temp_start_vas70 = estimator_vas0.get_estimate() + temp_start_vas70_plus

        estimator_vas70 = BayesianEstimatorVAS(
            vas_value=70,
            temp_start= temp_start_vas70,
            temp_std=temp_std_vas70,
            trials=trials_vas70)
    TextComponent vas70_explanation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Als nächstes erhalten Sie einen starken Schmerzreiz.
        Auf einer Skala von 1 bis 10 soll er eine 7 darstellen.

        1: kein Schmerz,
        10: unerträglicher Schmerz,
        7: schwerer Schmerz .

        (Bild einfügen)


        --- Leertaste zum Forfahren ---
    KeyboardComponent vas70_explanation_ok
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_vas70
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    PolygonComponent cross_pain_vas70
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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    CodeComponent thermoino_vas70
      Code Type = Py
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      Begin Routine:
        checked = False
        stimuli_clock.reset()
        time_for_ramp_up = luigi.set_temp(estimator_vas70.current_temp)[1]
      Each Frame:
        routine_duration = time_for_ramp_up + stimuli_clock.getTime()

        if not checked:
            if routine_duration > stimuli_duration:
                luigi.set_temp(temp_baseline)
                checked = True
  Routine feedback_vas70
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    TextComponent question_vas70
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = response_vas70.status==FINISHED
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      text:
        War der Reiz eine 7 (starker Schmerz) auf der Skala von 1 bis 10?

        (y/n)
    KeyboardComponent response_vas70
      allowedKeys = 'y','n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine estimate_vas70
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    TextComponent answer_vas70
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $f"Ihre Antwort war {response_vas70.keys}."
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    CodeComponent estimator_vas70
      Code Type = Py
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      Before Experiment:
        # instantiating here does not make sense because we need the values from the VAS 0 esitmator first
      Begin Routine:
        trial = loop_vas70.thisN
        estimator_vas70.conduct_trial(response=response_vas70.keys,trial=trial)
  Routine goodbye
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    TextComponent bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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    CodeComponent save_participant_data
      Code Type = Py
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      Before Experiment:
        from src.experiments.participant_data import add_participant
      End Routine:
        add_participant(
            expInfo['participant'],
            expInfo['age'],
            expInfo['gender'],
            estimator_vas0.get_estimate(),
            estimator_vas70.get_estimate())
Flow
  Routine welcome
  LoopInitiator loop_preexposure loopType="TrialHandler"
    loopType = random
    nReps = len(temps_preexposure)
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    Routine iti
    Routine preexposure
  LoopTerminator loop_preexposure
  Routine feedback_preexposure
  Routine transition_preeposure_to_vas0
  LoopInitiator loop_vas0 loopType="TrialHandler"
    loopType = random
    nReps = trials_vas0
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    Routine iti
    Routine trial_vas0
    Routine feedback_vas0
    Routine estimate_vas0
  LoopTerminator loop_vas0
  Routine transition_vas0_to_vas70
  LoopInitiator loop_vas70 loopType="TrialHandler"
    loopType = random
    nReps = trials_vas70
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    Routine iti
    Routine trial_vas70
    Routine feedback_vas70
    Routine estimate_vas70
  LoopTerminator loop_vas70
  Routine goodbye
