PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'pain_threshold': '38'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  expName = mpad1_exp
  keyboardBackend = ioHub
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Routines
  Routine blank500
  Routine welcome_screen
    CodeComponent stimuli
      Code Type = Py
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      Before Experiment:
        from stimuli import StimuliFunction
      Begin Experiment:
        seed = 160
        duration = 200 # in seconds
        amplitudes = [1, 1.5] # the range will be 2 * sum(amplitudes)
        periods = [67, 10]  # 1 : 3 gives a good result
        frequencies = 1./np.array(periods)
        baseline_temp = float(expInfo['pain_threshold']) + 1.5 # = 39.5 with a calibrated pain threshold of 38 °C

        stimuli = StimuliFunction(
            duration, frequencies, amplitudes,
            random_phase=True, seed=seed)
        stimuli.add_baseline_temp(baseline_temp)
        stimuli.add_plateaus(n_plateaus=4, duration_per_plateau=15)

        stimuli_length = stimuli.wave.shape[0] / stimuli.sample_rate
    CodeComponent remote_cotrol
      Code Type = Py
      disabled = True
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      Before Experiment:
        from imotions import RemoteControliMotions
      Begin Experiment:
        remote_control = RemoteControliMotions(
            participant = expInfo['participant'],
            study_name = expName,
            debug = True
            )

        remote_control.connect()

        # Start experiment in iMotions
        remote_control.start_study()
      End Experiment:
        remote_control.end_study()
        remote_control.close()
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Willkommen zum Experiment!
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    TextComponent text_start_exp
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = Das Experiment beginnt mit Tastendruck.
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    KeyboardComponent key_welcome
      allowedKeys = 'j','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine goodbye_screen
    TextComponent text_goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Vielen Dank für Ihre Versuchsteilnahme!
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  Routine trial_vas_continuous
    CodeComponent thermoino
      Code Type = Py
      disabled = True
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      Before Experiment:
        import time
        from thermoino import Thermoino
      Begin Experiment:
        port = "COM12" # top usb port on the front, use list_com_ports() to find out
        luigi = Thermoino(
            port=port,
            temp_baseline=32,
            rate_of_rise=5)

        luigi.init()
        luigi.init_ctc(bin_size_ms=500)
        ror, ctc = luigi.create_ctc(
            temp_course = stimuli.wave,
            sample_rate = stimuli.sample_rate,
            ctc_baseline = stimuli.baseline_temp,
            rate_of_rise_option = "protocol")
        luigi.load_ctc()
        luigi.trigger()
        time.sleep(0.1) # TODO: find out if this works without sleep
        luigi.prep_ctc_baseline() # 2 s wait time
      Begin Routine:
        luigi.exec_ctc()
      End Routine:
        luigi.close()
    CodeComponent marker
      Code Type = Py
      disabled = True
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      Before Experiment:
        from imotions import EventRecievingiMotions
      Begin Experiment:
        """ Connect with event recieving API """
        marker = EventRecievingiMotions()
        marker.connect()

        """ Initialize resampled wave and frame couting to measure seconds """
        wave_resampled = np.copy(stimuli.wave[::stimuli.sample_rate])
        frame_count_s = 0
      Begin Routine:
        """ Send discrete marker for experiment start """
        marker.marker_start_study
      Each Frame:
        """ Stream data for pain rating """
        marker.event_x_y(
            frameN,
            slider_vas_cont.getMarkerPos())

        """ Stream data for temperature course """
        # TODO: screen refresh rate is 60 Hz, somehow this runs on 30 only
        if frameN % 30 == 0:
            marker.event_x_y_2(
                frameN,
                wave_resampled[frame_count_s])
            print(wave_resampled[frame_count_s])
            print(frameN)
            frame_count_s += 1
      End Experiment:
        """ Close event recieving API connection """
        marker.close()
      End Routine:
        """ Send discrete marker for experiment start """
        marker.marker_end_study()
    SliderComponent slider_vas_cont
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ("Kein Schmerz","","","","","","","","","Stärkste vorstellbare Schmerzen")
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = stimuli_length
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    CodeComponent mouse
      Code Type = Py
      Before Experiment:
        import subprocess
        def install(package):
            """Installs the specified package using pip in a subprocess"""
            subprocess.run([sys.executable, "-m", "pip", "install", package], check=True)

        # The following code provides a workaround for using the standard slider
        # component without the need to press any buttons. It relies solely on the
        # x-coordinate of the mouse as input for the rating while the mouse is being
        # clicked and held automatically.
        # Note: All mouse code is imperative as running functions from the terminal
        # returns errors (see https://github.com/boppreh/mouse/issues/34).
        # Perhaps pyautogui or pynput could be used within functions, however the current
        # imperative mouse implementation just works.

        """Attempts to import the 'mouse' module, and installs it if necessary"""
        try:
            import mouse
        except ImportError:
            try:
                install("mouse")
                import mouse
            except Exception as e:
                print(f"Failed to install and import 'mouse': {e}")
      Begin Routine:
        """Holds down the left mouse button"""
        mouse.press(button="left")
      Each Frame:
        """Check if mouse is pressed"""
        #mouse_limited.draw()

        if not mouse.is_pressed(button='left'):
            mouse.press(button='left')

        # TODO: Add movement contrains by resetting the y-coordinate of the mouse
        # to the slider. That way the mouse device can be moved freely and accidental
        # click won't cause any problems.
        # TODO: Find a way to represent pixel coordinates of the slider.
      End Routine:
        """Releases the left mouse button"""
        mouse.release(button="left")
    PolygonComponent polygon_cross_cont
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_length
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    TextComponent text_vas_cont
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_length
      text [set every frame] = $f"Dies ist eine kontinuierliche VAS.\n\nIhr momentaner Schmerz liegt bei: {slider_vas_cont.getMarkerPos():.0f}" if slider_vas_cont.getMarkerPos() is not None else "Dies ist eine kontinuierliche VAS.\n\nIhr momentaner  Schmerz liegt bei: --"
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Flow
  Routine welcome_screen
  Routine trial_vas_continuous
  Routine blank500
  Routine goodbye_screen
